var res[40], h%, k%, x%, l%[40], n%, i%;
proc Out(n$)
  x% := FileSaveAs("C:\\Users\\Hilal\\Documents\\Spike8\\out\\m_export2__" + n$ + ".txt", 1, 1);
  res[k%] := x%; k% += 1;
end;
k% := 0;
h% := FileOpen("C:\\Users\\Hilal\\Documents\\Spike8\\data\\Blood Pressure Waveform.smr", 0, 0);
n% := ChanList(l%[]);
ExportChanList(); ExportTextFormat();
ExportChanList(0.0, 0.05, l%[]);
Out("0");
FileClose(0, -1);
h% := FileOpen("C:\\Users\\Hilal\\Documents\\Spike8\\data\\Burst Data as Events.smr", 0, 0);
n% := ChanList(l%[]);
ExportChanList(); ExportTextFormat();
ExportChanList(0.0, 0.05, l%[]);
Out("1");
FileClose(0, -1);
h% := FileOpen("C:\\Users\\Hilal\\Documents\\Spike8\\data\\Cardiac Action Potentials.smr", 0, 0);
n% := ChanList(l%[]);
ExportChanList(); ExportTextFormat();
ExportChanList(0.0, 0.05, l%[]);
Out("2");
FileClose(0, -1);
h% := FileOpen("C:\\Users\\Hilal\\Documents\\Spike8\\data\\Cellular firing activity.smr", 0, 0);
n% := ChanList(l%[]);
ExportChanList(); ExportTextFormat();
ExportChanList(0.0, 0.05, l%[]);
Out("3");
FileClose(0, -1);
h% := FileOpen("C:\\Users\\Hilal\\Documents\\Spike8\\data\\Cricket Song.smr", 0, 0);
n% := ChanList(l%[]);
ExportChanList(); ExportTextFormat();
ExportChanList(0.0, 0.05, l%[]);
Out("4");
FileClose(0, -1);
h% := FileOpen("C:\\Users\\Hilal\\Documents\\Spike8\\data\\Demo.smr", 0, 0);
n% := ChanList(l%[]);
ExportChanList(); ExportTextFormat();
ExportChanList(0.0, 0.05, l%[]);
Out("5");
FileClose(0, -1);
h% := FileOpen("C:\\Users\\Hilal\\Documents\\Spike8\\data\\ECG Waveform.smr", 0, 0);
n% := ChanList(l%[]);
ExportChanList(); ExportTextFormat();
ExportChanList(0.0, 0.05, l%[]);
Out("6");
FileClose(0, -1);
h% := FileOpen("C:\\Users\\Hilal\\Documents\\Spike8\\data\\EEG Waveform.smr", 0, 0);
n% := ChanList(l%[]);
ExportChanList(); ExportTextFormat();
ExportChanList(0.0, 0.05, l%[]);
Out("7");
FileClose(0, -1);
h% := FileOpen("C:\\Users\\Hilal\\Documents\\Spike8\\data\\EMG Waveform.smr", 0, 0);
n% := ChanList(l%[]);
ExportChanList(); ExportTextFormat();
ExportChanList(0.0, 0.05, l%[]);
Out("8");
FileClose(0, -1);
h% := FileOpen("C:\\Users\\Hilal\\Documents\\Spike8\\data\\Extracellular Spikes.smr", 0, 0);
n% := ChanList(l%[]);
ExportChanList(); ExportTextFormat();
ExportChanList(0.0, 0.05, l%[]);
Out("9");
FileClose(0, -1);
h% := FileOpen("C:\\Users\\Hilal\\Documents\\Spike8\\data\\Eye Movements.smr", 0, 0);
n% := ChanList(l%[]);
ExportChanList(); ExportTextFormat();
ExportChanList(0.0, 0.05, l%[]);
Out("10");
FileClose(0, -1);
h% := FileOpen("C:\\Users\\Hilal\\Documents\\Spike8\\data\\Field Potentials.smr", 0, 0);
n% := ChanList(l%[]);
ExportChanList(); ExportTextFormat();
ExportChanList(0.0, 0.05, l%[]);
Out("11");
FileClose(0, -1);
h% := FileOpen("C:\\Users\\Hilal\\Documents\\Spike8\\data\\Flow and CO2 Waveform.smr", 0, 0);
n% := ChanList(l%[]);
ExportChanList(); ExportTextFormat();
ExportChanList(0.0, 0.05, l%[]);
Out("12");
FileClose(0, -1);
h% := FileOpen("C:\\Users\\Hilal\\Documents\\Spike8\\data\\Spike data as Waveform.smr", 0, 0);
n% := ChanList(l%[]);
ExportChanList(); ExportTextFormat();
ExportChanList(0.0, 0.05, l%[]);
Out("13");
FileClose(0, -1);
