var res[80], h%, k%, x%;
proc Out(n$)
  x% := FileSaveAs("C:\\Users\\Hilal\\Documents\\Spike8\\out\\m_export3__" + n$ + ".txt", 1, 1);
  res[k%] := x%; k% += 1;
end;
h% := FileOpen("C:\\Users\\Hilal\\Documents\\Spike8\\data\\Demo.smr", 0, 0);
k% := 0;
ExportChanList(); ExportTextFormat();
ExportChanFormat(1, 0, 0);
ExportChanList(0.0, 3.0, 1, 2, 3, 4, 31);
Out("0");
ExportChanList(); ExportTextFormat();
ExportChanFormat(1, 1, 1);
ExportChanList(0.0, 3.0, 1, 2, 3, 4, 31);
Out("1");
ExportChanList(); ExportTextFormat();
ExportChanFormat(1, 2, 2);
ExportChanList(0.0, 3.0, 1, 2, 3, 4, 31);
Out("2");
ExportChanList(); ExportTextFormat();
ExportChanFormat(1, 0, 2);
ExportChanList(0.0, 3.0, 1, 2, 3, 4, 31);
Out("3");
ExportChanList(); ExportTextFormat();
ExportChanFormat(1, 2, 0);
ExportChanList(0.0, 3.0, 1, 2, 3, 4, 31);
Out("4");
ExportChanList(); ExportTextFormat();
ExportChanFormat(2, 0, 0);
ExportChanList(0.0, 3.0, 1, 2, 3, 4, 31);
Out("5");
ExportChanList(); ExportTextFormat();
ExportChanFormat(2, 1, 1);
ExportChanList(0.0, 3.0, 1, 2, 3, 4, 31);
Out("6");
ExportChanList(); ExportTextFormat();
ExportChanFormat(2, 2, 2);
ExportChanList(0.0, 3.0, 1, 2, 3, 4, 31);
Out("7");
ExportChanList(); ExportTextFormat();
ExportChanFormat(2, 0, 2);
ExportChanList(0.0, 3.0, 1, 2, 3, 4, 31);
Out("8");
ExportChanList(); ExportTextFormat();
ExportChanFormat(2, 2, 0);
ExportChanList(0.0, 3.0, 1, 2, 3, 4, 31);
Out("9");
ExportChanList(); ExportTextFormat();
ExportChanFormat(5, 0, 0);
ExportChanList(0.0, 3.0, 1, 2, 3, 4, 31);
Out("10");
ExportChanList(); ExportTextFormat();
ExportChanFormat(5, 1, 1);
ExportChanList(0.0, 3.0, 1, 2, 3, 4, 31);
Out("11");
ExportChanList(); ExportTextFormat();
ExportChanFormat(5, 2, 2);
ExportChanList(0.0, 3.0, 1, 2, 3, 4, 31);
Out("12");
ExportChanList(); ExportTextFormat();
ExportChanFormat(5, 0, 2);
ExportChanList(0.0, 3.0, 1, 2, 3, 4, 31);
Out("13");
ExportChanList(); ExportTextFormat();
ExportChanFormat(5, 2, 0);
ExportChanList(0.0, 3.0, 1, 2, 3, 4, 31);
Out("14");
ExportChanList(); ExportTextFormat();
ExportChanFormat(8, 0, 0);
ExportChanList(0.0, 3.0, 1, 2, 3, 4, 31);
Out("15");
ExportChanList(); ExportTextFormat();
ExportChanFormat(8, 1, 1);
ExportChanList(0.0, 3.0, 1, 2, 3, 4, 31);
Out("16");
ExportChanList(); ExportTextFormat();
ExportChanFormat(8, 2, 2);
ExportChanList(0.0, 3.0, 1, 2, 3, 4, 31);
Out("17");
ExportChanList(); ExportTextFormat();
ExportChanFormat(8, 0, 2);
ExportChanList(0.0, 3.0, 1, 2, 3, 4, 31);
Out("18");
ExportChanList(); ExportTextFormat();
ExportChanFormat(8, 2, 0);
ExportChanList(0.0, 3.0, 1, 2, 3, 4, 31);
Out("19");
ExportChanList(); ExportTextFormat();
ExportTextFormat(0, 1, 1, ";");
ExportChanList(0.0, 2.0, 1, 3, 4);
Out("20");
ExportChanList(); ExportTextFormat();
ExportTextFormat(1, 0, 2, ",", "|");
ExportChanList(0.0, 2.0, 1, 3, 4);
Out("21");
ExportChanList(); ExportTextFormat();
ExportTextFormat(2, 2, 1, " ", "/");
ExportChanList(0.0, 2.0, 1, 3, 4);
Out("22");
ExportChanList(); ExportTextFormat();
ExportTextFormat(1, 1, 0, "\t", ";");
ExportChanList(0.0, 2.0, 1, 3, 4);
Out("23");
